PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Completed URL = https://app.prolific.com/submissions/complete?cc=CZ6DTRHZ
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['resources/consent_3.png', 'resources/consent_2.png', 'resources/consent_1.png', 'resources/ins7.png', 'resources/ins5.png', 'resources/ins3.png', 'resources/ins4.png', 'resources/ins2.png', 'resources/ins9.png', 'resources/ins10.png', 'resources/ins8.png', 'resources/ins6.png', 'resources/ins1.png', 'resources/ins0.png', 'resources/agree.png']
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  color = $[1,1,1]
  expName = PRE_PILOT
  keyboardBackend = ioHub
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Routines
  Routine consent1
    ImageComponent Image_consent1
      image = resources/consent_1.png
      pos = (0, 0.042)
      size = (0.73, 0.93)
      startVal [time (s)] = 0
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    TextComponent Text_consent1
      color = black
      letterHeight = 0.03
      pos = (0, -0.45)
      startVal [time (s)] = 0.0
      text = Press the spacebar to continue reading
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    KeyboardComponent Key_consent1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine consent2
    ImageComponent Image_consent2
      image = resources/consent_2.png
      pos = (0, 0.042)
      size = (0.70, 0.90)
      startVal [time (s)] = 0.0
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    TextComponent Text_consent2
      color = black
      letterHeight = 0.03
      pos = (0, -0.45)
      startVal [time (s)] = 0.0
      text = Press the space bar to continue reading
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    KeyboardComponent Key_consent2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine consent3
    ImageComponent Image_consent3
      image = resources/consent_3.png
      pos = (0, 0.042)
      size = (0.70, 0.90)
      startVal [time (s)] = 0.0
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    PolygonComponent button_consent
      fillColor = white
      lineColor = black
      pos = (-0.27, -0.43)
      shape = rectangle
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    TextComponent Text_consent3
      color = black
      letterHeight = 0.02
      pos = (0.01, -0.43)
      startVal [time (s)] = 0.0
      text = I agree and consent to the terms above (Press Y to agree)
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    KeyboardComponent Ky_consent3
      allowedKeys = 'y'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine consent_3FB
    ImageComponent Image_consent3FB
      image = resources/consent_3.png
      pos = (0, 0.042)
      size = (0.70, 0.90)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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    PolygonComponent Button_consent3FB
      fillColor = white
      lineColor = black
      pos = (-0.27, -0.43)
      shape = rectangle
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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    TextComponent Text_consent3FB
      color = black
      letterHeight = 0.02
      pos = (0.01, -0.43)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = I agree and consent to the terms above (Press Y to agree)
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    ImageComponent Image_agree
      image = resources/agree.png
      pos = (-0.27, -0.43)
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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  Routine Ins1
    ImageComponent Image_ins1
      image = resources/ins1.png
      size = (1.2, 0.8)
      startVal [time (s)] = 0.0
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    KeyboardComponent Key_ins1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ins2
  Routine Fix_Practice
    PolygonComponent Fixcross_Practice
      fillColor = black
      pos = (0, 0.15)
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine Cat_practice
    TextComponent text
      color = black
      letterHeight = 0.07
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = CITIES
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  Routine Cat_practice2
    TextComponent Text_Catpractice2
      color = black
      letterHeight = 0.07
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = CITIES
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    MicrophoneComponent mic_Catpractice
      channels = auto
      device = None
      maxSize = 24000
      outputType = default
      sampleRate = DVD Audio (48kHz)
      speakTimes = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5
      transcribe = True
      transcribeBackend = Built-in
      transcribeLang = en-US
      trimSilent = False
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  Routine Fix_test
    PolygonComponent Fixcross_test
      fillColor = black
      pos = (0, 0.15)
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine Cat_test
    TextComponent Text_cattest
      color = black
      letterHeight = 0.07
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $items
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  Routine Cat_test2
    TextComponent Text_Cattest
      color = black
      letterHeight = 0.07
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120.5
      text [set every repeat] = $items
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    TextComponent Text_Gotest
      color = green
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = Go!
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    MicrophoneComponent Mic_cattest2
      channels = auto
      device = None
      maxSize = 24000
      outputType = default
      sampleRate = DVD Audio (48kHz)
      speakTimes = True
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 120
      transcribe = True
      transcribeBackend = Built-in
      transcribeLang = en-US
      trimSilent = False
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    TextComponent Text_Catstop
      color = red
      letterHeight = 0.05
      startVal [time (s)] = 120.5
      stopVal [time (s)] = 121
      text = Stop!
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  Routine Ins5_2
  Routine stop
    TextComponent Text_stoppractice
      color = red
      letterHeight = 0.07
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = Stop!
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  Routine Go_practice
    TextComponent Text_Catgopractice
      color = black
      letterHeight = 0.07
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = CITIES
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    TextComponent Text_gopractice
      color = green
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = Go!
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  Routine stop_2
  Routine prueba
    TextComponent text_2
      color = black
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = prueba
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  Routine Stop
    TextComponent Text_Stoppractice
      color = red
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = Stop!
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  Routine Cat_practiceRegis
    TextComponent Text_Catpracticeregis
      color = black
      letterHeight = 0.07
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text = CITIES
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    MicrophoneComponent Mic_catpractice
      channels = auto
      device = None
      maxSize = 24000
      outputType = default
      sampleRate = DVD Audio (48kHz)
      speakTimes = True
      startVal [time (s)] = 0.0
      transcribe = False
      transcribeBackend = Built-in
      transcribeLang = en-US
      trimSilent = False
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    KeyboardComponent key_resp
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_4
      color = black
      letterHeight = 0.03
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = "Enter": move to the next category
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  Routine Go_test
    TextComponent Text_Catgotest
      color = black
      letterHeight = 0.07
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text [set every repeat] = $items
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    TextComponent Text_Gopractice
      color = green
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = Go!
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  Routine Cat_test_2
  Routine Cat_testregis
    TextComponent Text_cattextregis
      color = black
      letterHeight = 0.07
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $items
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    MicrophoneComponent Mic_cattestresgis
      channels = auto
      device = None
      maxSize = 24000
      outputType = default
      sampleRate = DVD Audio (48kHz)
      speakTimes = True
      startVal [time (s)] = 0.0
      transcribe = False
      transcribeBackend = Built-in
      transcribeLang = en-US
      trimSilent = False
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    KeyboardComponent key_resp_2
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_3
      color = black
      letterHeight = 0.03
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      text = "Enter": Move to the next category
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    CodeComponent code_2
      Code Type = Both
      Begin JS Routine:
        if ((trials.thisN === 0)) {
            task_timer = new util.CountdownTimer({"start": 1200});
        }
      Begin Routine:
        if trials.thisN == 0:
            task_timer = core.CountdownTimer(start = 1200)
      Each Frame:
        time_left = task_timer.getTime()

        minutes = str(int(time_left / 60)).zfill(2)
        seconds = str(int(time_left % 60)).zfill(2)

        if time_left <= 0.0:
            trials.finished = True
            continueRoutine = False
      Each JS Frame:
        time_left = task_timer.getTime();
        minutes = String(Number.parseInt((time_left / 60))).padStart(2, '0');
        seconds = String(Number.parseInt((time_left % 60))).padStart(2, '0');
        if ((time_left <= 0.0)) {
            trials.finished = true;
            continueRoutine = false;
        }
    TextComponent text_6
      color = black
      letterHeight = 0.05
      pos = (0.5, 0.4)
      startVal [time (s)] = 0.0
      text [set every frame] = $f'Time left {minutes}:{seconds}'
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  Routine mic
    ImageComponent Image_mic
      image = resources/ins0.png
      size = (1.2, 0.8)
      startVal [time (s)] = 0.0
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    KeyboardComponent Key_mic
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Ins8
    ImageComponent Image_ins8
      image = resources/ins8.png
      size = (1.2, 0.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    CodeComponent code
      Code Type = Auto->JS
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      Each Frame:
        if time_left <= 0.0:
            trials.finished = True
            continueRoutine = False
  Routine Ins7
    ImageComponent Image_ins7
      image = resources/ins7.png
      size = (1.2, 0.8)
      startVal [time (s)] = 0.0
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    KeyboardComponent Key_ins7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ins6
    ImageComponent Image_ins6
      image = resources/ins6.png
      size = (1.2, 0.8)
      startVal [time (s)] = 0.0
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    KeyboardComponent Key_ins6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ins5
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  Routine Ins4
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  Routine Ins3
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  Routine Ins2
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  Routine Ins10
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  Routine ins9
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  Routine ins_7
    ImageComponent Image_ins7_2
      image = resources/ins7.png
      size = (1.2, 0.8)
      startVal [time (s)] = 0.0
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    KeyboardComponent Key_ins7_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine mic
  Routine consent1
  Routine consent2
  Routine consent3
  Routine consent_3FB
  Routine Ins1
  Routine Ins2
  Routine Ins3
  Routine Ins4
  Routine ins5
  Routine Fix_Practice
  Routine Cat_practiceRegis
  Routine ins6
  Routine Ins7
  Routine Fix_test
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = CATEGORIES.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'items': 'HOME APPLIANCES'},
      {'items': 'HOBBIES'},
      {'items': 'LIQUIDS'},
      {'items': 'MUSICAL INSTRUMENTS'},
      {'items': 'BODY PARTS'},
      {'items': 'MEANS OF TRANSPORT'},
      {'items': 'FRUITS'},
      {'items': 'VEGETABLES'},
      {'items': 'OCCUPATIONS'},
      {'items': 'HOLIDAYS'},
      {'items': 'TOOLS'},
      {'items': 'MEDICAL CONDITIONS'},
      {'items': 'ANIMALS'}]
    Routine Cat_testregis
    Routine Ins8
  LoopTerminator trials
  Routine Ins10
